PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent Intro_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 歡迎參加本次實驗 ：）
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    KeyboardComponent Intro_response
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BlockStart
    TextComponent BlockStart_instruction1
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockInstructions
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    TextComponent BlockStart_instruction2
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockInstructions2
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    KeyboardComponent BlockStart_response
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VarSet
    TextComponent VarSet_instruction1
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialInstructions
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    TextComponent VarSet_instruction2
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = Please hit the spacebar to continue
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    KeyboardComponent VarSet_response
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = oneMinute01_test.mp4
      size = (1.575, 0.866)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent Trial_reminder
      letterHeight = 0.05
      pos = (0, 0.48)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialReminder
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    PolygonComponent polygon_start
      fillColor = grey
      lineColor = grey
      pos = (0, -0.1)
      shape = rectangle
      size = (1, 1.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent Trial_response
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InputTime
    TextComponent InputTime_instruction1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $trialQuestion
    KeyboardComponent InputTime_response
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0.5
      pos = (0, -0.008)
      saveStartStop = False
      shape = rectangle
      size = (0.4, 0.128)
      startVal [time (s)] = 0.0
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    TextComponent InputTime_instruction2
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 請輸入所看到的數值，確認後按下Enter鍵
      wrapWidth = 1.52
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    TextboxComponent input_box
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text = 輸入
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  Routine End
    TextComponent End_instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        All Done!


        Thanks!!
Flow
  Routine Intro
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = movieVersionControlSheet.xlsx
    loopType = sequential
    nReps = 10
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    conditions:
      [{'blockInstructions': 'In this section, please “mouth” the syllable “wa”.', 'blockInstructions2': 'The clock will start moving and then, whenever you want to, please MOUTH “wa”.  The clock will then stop.  Please then type in what time was showing on the clock when you mouthed “wa”.', 'trialInstructions': 'In this section you are mouthing “wa”', 'trialReminder': 'MOUTH', 'trialQuestion': 'What time was showing on the clock when you mouthed “wa”?', 'condition': 'Mouth'},
      {'blockInstructions': 'In this section, please say the syllable “wa”.', 'blockInstructions2': 'The clock will start moving and then, whenever you want to, please SAY “wa”.  The clock will then stop.  Please then type in what time was showing on the clock when you mouthed “wa”.', 'trialInstructions': 'In this section you are saying “wa”', 'trialReminder': 'SAY', 'trialQuestion': 'What time was showing on the clock when you said “wa”?', 'condition': 'Say'}]
    Routine BlockStart
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine VarSet
      Routine Trial
      Routine InputTime
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
